//Variable declaration
var filter_radius = 20; 
var threshold = 100;
var sat_pix = 0.001;
var width = getWidth;
var height = getHeight;
var min_area = 100;
var ort = "No";
var scale = "No";
var diagonal= "No";
var num_wounds = 1; // Default is one;

// ----------------------------------------------------------------------------------------------------------------------
// Auxiliary functions
// ----------------------------------------------------------------------------------------------------------------------
function edge_min_coordinates(arr_ROI) 
{
   arr_min = newArray();
   arr_min = Array.concat(arr_min, arr_ROI [0]);
   for (x = 1; x< arr_ROI.length - 2; x++)
   {
         if (arr_ROI [x-1] > arr_ROI [x] && arr_ROI [x] < arr_ROI [x+1])
         {
            arr_min = Array.concat(arr_min, arr_ROI [x]);
         }
   }
    
   return arr_min;   

}


// ----------------------------------------------------------------------------------------------------------------------
function edge_max_coordinates(arr_ROI) 
{
   arr_max = newArray();
   for (x = 1; x< arr_ROI.length - 2; x++)
   {
         if (arr_ROI [x-1] < arr_ROI [x] && arr_ROI [x] > arr_ROI [x+1])
         {
            arr_max = Array.concat(arr_max, arr_ROI [x]);
         }
   }
   
   arr_max = Array.concat(arr_max, arr_ROI [arr_ROI.length - 1]);
   
   return arr_max;   
}


// ----------------------------------------------------------------------------------------------------------------------
function diff_arrays(arr_max, arr_min)
{
     arr_diff = newArray();
     for (x = 0; x< arr_max.length-1; x++)
     {
           arr_diff = Array.concat(arr_diff, arr_max [x] - arr_min [x]);
     }
     return arr_diff;
}





//------------------------------------------------------------------------------------------------------------------------
function scale_fixed(scale)
{
	getPixelSize(unit, pw, ph);
   if(scale=="Yes")
	{
   run("Set Scale...", "distance=1 known="+pw+" unit=" + unit+" global");
	}
	if(scale=="No")
	{
   run("Set Scale...", "distance=1 known="+pw+" unit=" + unit);
	}

}


//------------------------------------------------------------------------------------------------------------------------
function diagonal_fixed(diagonal, angle)
{
	
   if(diagonal=="Yes")
	{
	angle1=(90-(angle-90));
	beta = angle1 * (PI/180);
   correct_angle=sin(beta);
	}
	if(diagonal=="No")
	{
   correct_angle=1;
	}
	return correct_angle;


}



// ----------------------------------------------------------------------------------------------------------------------
// Body of the macro
// ----------------------------------------------------------------------------------------------------------------------
macro 'Wound healing Size Stacks Tool - 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'

{



   run("Select None");
   Width = newArray();
   StandarDeviation = newArray();
   Area= newArray();
   AreaFraction = newArray();
   height_total=getHeight();
   width_total=getWidth();

    run("Wound healing size tool options");
    run("Options...", " black");
    roiManager("reset");
   
    getPixelSize(unit, pw, ph);
   for (n = 1; n< nSlices+1; n++)
   {
   setSlice(n);
   Stack.setSlice(n);

    
   	run("Duplicate...", n );
    setForegroundColor(0, 0, 0);
    setBackgroundColor(255, 255, 255);
    roiManager("reset");
    roiManager("Associate", "true");
    
    
	run("8-bit");
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   run("Enhance Contrast...", "saturated="+sat_pix+" normalize");
   run("Variance...", "radius="+filter_radius+" stack"); 
   setThreshold(0, threshold);
   run("Convert to Mask", "black");
   run("Fill Holes");
   run("Select All");
   
   run("Analyze Particles...", 
          "size="+min_area+"-Infinity circularity=0.00-1.00 show=Nothing add stack");
   run("Revert");
 
   roiManager("Show None");
   close();
   
   if (roiManager("count")>1)
   {
       area_large = newArray(roiManager("count"));
       for (i = 0; i<(roiManager("count")); i++)
       {
           roiManager("select", i)
;
           getStatistics(area_large[i], mean, min, max, std, histogram);
       }
       largest = 0;
       for (i = 0; i<(roiManager("count")); i++)
       {
           if (area_large[i]>largest)
           {
               largest = area_large[i];
               large = i;
           }
       }
       roiManager("select", large);
   }
   else
   {
       roiManager("select", 0);
   }
   
   roiManager("Set Color", "cyan");
   roiManager("Associate", "true");
   
   Roi.getContainedPoints(xpoints, ypoints);
   min_x = edge_min_coordinates(xpoints);
   max_x = edge_max_coordinates(xpoints);
   diff_vec = diff_arrays(max_x , min_x);

   Array.getStatistics(diff_vec, low, high, avg_widthp, std_distp);
  
   
   List.setMeasurements;  
   angle = List.getValue("Angle");
   correct_angle = diagonal_fixed(diagonal, angle);
   
   Width = Array.concat(Width,(avg_widthp*pw)*correct_angle);
   StandarDeviation = Array.concat(StandarDeviation,(std_distp*pw));

   
   run("Set Scale...", "distance=1 known="+pw+" unit=" + unit);
   run("Set Measurements...", "redirect=None decimal=3");
   getStatistics(area2, mean, min, max, std, histogram);

   total_area=(height_total*pw)*(width_total*pw);
   Area=Array.concat(Area,area2);
   AreaFraction=Array.concat(AreaFraction,((area2/total_area)*100));

    roiManager("Show None");
	roiManager("Show All");



   }
   roiManager("Show None");
   Array.show("Results (row numbers)", Area,AreaFraction,Width,StandarDeviation);
   scale_fixed(scale);
   setTool("rectangle");
   
   

  
   
}
// ----------------------------------------------------------------------------------------------------------------------
// Body of the macro 2
// ----------------------------------------------------------------------------------------------------------------------
macro 'Wound healing size Tool - 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'

{
   run("Select None");
   snapshot();
   setupUndo(); 
   run("Wound healing size tool options");
   run("Options...", " black");
   run("Duplicate...", "duplicate");
   setForegroundColor(0, 0, 0);
   setBackgroundColor(255, 255, 255);
   roiManager("reset");
   roiManager("Associate", "true");
   run("8-bit");
   

   if (isOpen("ROI Manager")) 
   {
      selectWindow("ROI Manager");
      run("Select None");
      run("Close");
   }
   getPixelSize(unit, pw, ph);
   run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
  
   run("Enhance Contrast...", "saturated="+sat_pix+" normalize");
   run("Variance...", "radius="+filter_radius+" stack"); 
   setThreshold(0, threshold);
   run("Convert to Mask", "black");
   run("Fill Holes");
   run("Select All");
   
   run("Analyze Particles...", 
          "size="+min_area+"-Infinity circularity=0.00-1.00 show=Nothing add stack");
   run("Revert");
 
   roiManager("Show None");
   close();
  
   if (roiManager("count")>1)
   {
       area_large = newArray(roiManager("count"));
       for (i = 0; i<(roiManager("count")); i++)
       {
           roiManager("select", i)
           getStatistics(area_large[i], mean, min, max, std, histogram);
       }
       largest = 0;
       for (i = 0; i<(roiManager("count")); i++)
       {
           if (area_large[i]>largest)
           {
               largest = area_large[i];
               large = i;
           }
       }
       roiManager("select", large);
   }
   else
   {
       roiManager("select", 0);
   }
   reset();
   setupUndo();
   roiManager("Set Color", "cyan");
   
   Roi.getContainedPoints(xpoints, ypoints);
   min_x = edge_min_coordinates(xpoints);
   max_x = edge_max_coordinates(xpoints);
   diff_vec = diff_arrays(max_x , min_x);

   Array.getStatistics(diff_vec, low, high, avg_width, std_dist);
    
   List.setMeasurements;  
   angle = List.getValue("Angle");
   correct_angle = diagonal_fixed(diagonal, angle);
   
   avg_width = (avg_width*pw)*correct_angle;
   std_dist = (std_dist*pw);

   run("Set Scale...", "distance=1 known="+pw+" unit=" + unit);
   run("Set Measurements...", "redirect=None decimal=3");
   getStatistics(area, mean, min, max, std, histogram);
   height_total=getHeight()*pw;
   width_total=getWidth()*pw;
   total_area=(height_total*width_total);
   area_fraction=(area/total_area)*100;
  
   n1=getValue("results.count");
   title_image=getTitle();
   setResult("Label", n1, title_image);
   setResult("Area "+unit+"^2", n1, area);
   setResult("Area %", n1, area_fraction);
   setResult("Avg. Width "+unit, n1, avg_width);
   setResult("Standard deviation "+unit, n1, std_dist);
   scale_fixed(scale);
   setTool("rectangle");
  
}

// ----------------------------------------------------------------------------------------------------------------------
// Body of the macro 3 manual
// ----------------------------------------------------------------------------------------------------------------------

macro 'Wound healing size Manual Tool - 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'

{
	
   roiManager("Add");
   roiManager("select", 0);
   reset();
   setupUndo();
   roiManager("Set Color", "cyan");
   getPixelSize(unit, pw, ph);
   run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
   
   Roi.getContainedPoints(xpoints, ypoints);
   min_x = edge_min_coordinates(xpoints);
   max_x = edge_max_coordinates(xpoints);
   diff_vec = diff_arrays(max_x , min_x);

   Array.getStatistics(diff_vec, low, high, avg_width, std_dist);
    
   List.setMeasurements;  
   angle = List.getValue("Angle");
   correct_angle = diagonal_fixed(diagonal, angle);
   
   avg_width = (avg_width*pw)*correct_angle;
   std_dist = (std_dist*pw);

   run("Set Scale...", "distance=1 known="+pw+" unit=" + unit);
   run("Set Measurements...", "redirect=None decimal=3");
   getStatistics(area, mean, min, max, std, histogram);
   height_total=getHeight()*pw;
   width_total=getWidth()*pw;
   total_area=(height_total*width_total);
   area_fraction=(area/total_area)*100;
  
   n1=getValue("results.count");
   title_image=getTitle();
   setResult("Label", n1, title_image);
   setResult("Area "+unit+"^2", n1, area);
   setResult("Area %", n1, area_fraction);
   setResult("Avg. Width "+unit, n1, avg_width);
   setResult("Standard deviation "+unit, n1, std_dist);
   scale_fixed(scale);
   setTool("rectangle");
   roiManager("Delete");
  
}




//
// ----------------------------------------------------------------------------------------------------------------------
// Tooltips & Dialogs

macro 'Rotate 90° Tool - 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'

{
	snapshot();
    run("Rotate 90 Degrees Right");
    setTool("rectangle");
    
   
}

macro 'Wound healing size tool options'
{

    
set_scale_global = newArray("Yes","No");
    is_diagonal = newArray("Yes","No");
    Dialog.create("Wound healing size options");
    Dialog.addNumber("Variance window radius", filter_radius);
    Dialog.addSlider("Threshold value", 0, 255,  threshold);
    Dialog.addNumber("Percentage of saturated pixels", sat_pix);
    Dialog.addChoice("Set Scale global?", set_scale_global);
    Dialog.addChoice("The scratch is diagonal??", is_diagonal);

    Dialog.show();
    
    filter_radius = Dialog.getNumber();
    threshold = Dialog.getNumber();
    sat_pix = Dialog.getNumber();

    scale = Dialog.getChoice();
    diagonal = Dialog.getChoice();
    scale_fixed(scale);
  
}

// New macro for multiple wounds; SW

macro 'Multiple Wound healing size tool options' 
{
   set_scale_global = newArray("Yes","No");
    is_diagonal = newArray("Yes","No");
    Dialog.create("Multiple wound healing size options");
    Dialog.addNumber("Variance window radius", filter_radius);
    Dialog.addSlider("Threshold value", 0, 255,  threshold);
    Dialog.addNumber("Percentage of saturated pixels", sat_pix);
    Dialog.addChoice("Set Scale global?", set_scale_global);
    Dialog.addChoice("The scratch is diagonal??", is_diagonal);
    Dialog.addNumber("Number of wounds", num_wounds); // new dialog box; SW

    Dialog.show();
    
    filter_radius = Dialog.getNumber();
    threshold = Dialog.getNumber();
    sat_pix = Dialog.getNumber();

    scale = Dialog.getChoice();
    diagonal = Dialog.getChoice();

    num_wounds = Dialog.getNumber();  // retrieving user input; SW
    
    scale_fixed(scale);
  
}
// ----------------------------------------------------------------------------------------------------------------------
// body of tool 4 (modified macro 2).
// ----------------------------------------------------------------------------------------------------------------------

macro "Multiple Wound healing size Tool - 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"
{

   run("Select None");
   snapshot();
   setupUndo(); 

   //run("Clear Results"); //Optional, I find this keeps things uncluttered, but you have to save after each image/use. Just uncomment if you would like it; SW
   
   run("Multiple Wound healing size tool options"); // opening the multiple wound options; SW
   run("Options...", " black");
   run("Duplicate...", "duplicate");
   setForegroundColor(0, 0, 0);
   setBackgroundColor(255, 255, 255);
   roiManager("reset");
   roiManager("Associate", "true");
   run("8-bit");
   

   if (isOpen("ROI Manager")) 
   {
      selectWindow("ROI Manager");
      run("Select None");
      run("Close");
   }
   getPixelSize(unit, pw, ph);
   run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
  
   run("Enhance Contrast...", "saturated="+sat_pix+" normalize");
   run("Variance...", "radius="+filter_radius+" stack"); 
   setThreshold(0, threshold);
   run("Convert to Mask", "black");
   run("Fill Holes");
   run("Select All");
   
   run("Analyze Particles...", 
          "size="+min_area+"-Infinity circularity=0.00-1.00 show=Nothing add stack");
   run("Revert");
 
   roiManager("Show None");
   close();

   for (n = 0; n < num_wounds; n++){ //for loop: how many wounds to find/count; SW
   if (roiManager("count") <= 1 || roiManager("count") < num_wounds) //if user selection is too many or there is only one ROI option...; SW
   {
       roiManager("select", 0);
       roiName = getTitle() + "-" + 1 + "-" + n;
      print("Number of wounds selected exceeds number of wounds identified."); // setting error message; SW
      break;
   }
       area_large = newArray(roiManager("count"));

      index = newArray(roiManager("count")); // creating index array for later sorting; SW
      for (i = 0; i < index.length; i++) {
         index[i] = i;
      }
      
      for (i = 0; i<(roiManager("count")); i++)
       {
           roiManager("select", i)
           getStatistics(area_large[i], mean, min, max, std, histogram);
       }
      
   // Sorting arrays (and matching indices) in decreasing order; SW
   for (i = 0; i < area_large.length - 1; i++) {
    for (j = i + 1; j < area_large.length; j++) {
        if (area_large[j] > area_large[i]) {
            tempArea = area_large[i];
            area_large[i] = area_large[j];
            area_large[j] = tempArea;
            
            tempIndex = index[i];
            index[i] = index[j];
            index[j] = tempIndex;
        }
    }
   }

   roiManager("select", index[n]); //select n largest based on loop; SW
   roiName = getTitle() + "-" + (index[n] + 1) + "-" + (n + 1); //Name that shows up in the results tab. (image name, roi #, and which loop iteration you are on); SW
   
   reset();
   setupUndo();
   roiManager("Set Color", "cyan"); //setting selected areas to cyan for visability; SW
   
   // Calculations
   Roi.getContainedPoints(xpoints, ypoints);
   min_x = edge_min_coordinates(xpoints);
   max_x = edge_max_coordinates(xpoints);
   diff_vec = diff_arrays(max_x , min_x);

   Array.getStatistics(diff_vec, low, high, avg_width, std_dist);
    
   List.setMeasurements;  
   angle = List.getValue("Angle");
   correct_angle = diagonal_fixed(diagonal, angle);
   
   avg_width = (avg_width*pw)*correct_angle; //average wound width; SW
   std_dist = (std_dist*pw); //std of the wound width (from my understanding); SW

   run("Set Scale...", "distance=1 known="+pw+" unit=" + unit);
   run("Set Measurements...", "redirect=None decimal=3");
   getStatistics(area, mean, min, max, std, histogram);
   height_total=getHeight()*pw;
   width_total=getWidth()*pw;
   total_area=(height_total*width_total);
   area_fraction=(area/total_area)*100;
   title_image=getTitle();
  
   // Printing Results
   setResult("Label", n, roiName);
   setResult("Area "+unit+"^2", n, area);
   setResult("Area %", n, area_fraction);
   setResult("Avg. Width"+unit, n, avg_width);
   setResult("Standard deviation "+unit, n, std_dist);
   
   scale_fixed(scale);
   setTool("rectangle");
   updateResults();
   }
   roiManager("Show All");
}


// ---------------------------------------------------------------------------------------------------------------------
// macro tool 5 body - just a short cut to save time; SW
// ---------------------------------------------------------------------------------------------------------------------

macro "Manual Measurements Tool - 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"{
   run("Set Measurements...", "area standard display label redirect=None decimal=3");
}

// ----------------------------------------------------------------------------------------------------------------------
macro 'User defined background'
{
    Dialog.create("Background specification")
    Dialog.addMessage("ROI belonging to the gap in the wound must be white, select " +  
                                         "Invert' to turn it to white, 'Keep' to keep it as it is");
    arr_res = newArray("Keep", "Invert");
    Dialog.addChoice("Invert the colour?", arr_res);
    Dialog.show();
    res = Dialog.getChoice();
    if (res=="Invert")
        {
          run("Invert", "stack");
        }   
} 
